PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = vst_task_final
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Sample
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent shape_L
      color [set every repeat] = $color1
      image [set every repeat] = $shape1
      pos = (-0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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    ImageComponent shape_C
      color [set every repeat] = $color2
      image [set every repeat] = $shape2
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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    ImageComponent shape_R
      color [set every repeat] = $color3
      image [set every repeat] = $shape3
      pos = (0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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  Routine Test
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if condition == "different":
            test_color_L = color2
            test_color_C = color1
        else:
            test_color_L = color1
            test_color_C = color2
    ImageComponent test_shape_L
      color [set every repeat] = $test_color_L
      image [set every repeat] = $shape1
      pos = (-0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    ImageComponent test_shape_C
      color [set every repeat] = $test_color_C
      image [set every repeat] = $shape2
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    ImageComponent test_shape_R
      color [set every repeat] = $color3
      image [set every repeat] = $shape3
      pos = (0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 's', 'd'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Instructions
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    TextComponent inst_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Visual Short-Term Memory Binding Task (VSTMBT)

        In this task, you will see a fixation cross in the center of the screen to start.
        Please focus your eyes on the cross.

        Next, three shapes will appear simultaneously.
        Each shape will be filled with a unique color.
        You have 2 seconds to memorize these shape-and-color combinations.

        After a brief 1-second blank delay, three shapes will reappear on the screen.

        Your goal is to determine if the shape-and-color combinations are identical to the ones you just memorized:

        - Press S if the combinations are exactly the SAME.

        - Press D if the combinations are DIFFERENT (meaning two colors have swapped shapes).

        Please respond as quickly and accurately as possible.


        Press the SPACEBAR to begin the task.

        (This test run was designed by Rachel Mammen)
    KeyboardComponent inst_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Summary
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    CodeComponent code_2
      Code Type = Both
      End JS Routine:
        // Send behavioral data CSV straight to OSF via DataPipe
        psychoJS.experiment.saveCSV({
            serialize: true,
            callback: function(csvData) {
                fetch("https://jspsych.org", {
                    method: "POST",
                    headers: {
                        "Content-Type": "application/json",
                        "Accept": "application/json",
                    },
                    body: JSON.stringify({
                        experimentID: "3WpNjswWzizS",
                        filename: psychoJS.experiment.getParticipant() + "_" + psychoJS.experiment.getExpName() + "_" + psychoJS.experiment.getDatetime() + ".csv",
                        data: csvData
                    })
                })
                .then(response => console.log("Data successfully sent to OSF!"))
                .catch(error => console.error("DataPipe Error:", error));
            }
        });
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'shape1': 'cross.png', 'shape2': 'star.png', 'shape3': 'wave.png', 'color1': 'red', 'color2': 'green', 'color3': 'blue', 'condition': 'same', 'corrAns': 's'},
      {'shape1': 'cross.png', 'shape2': 'star.png', 'shape3': 'wave.png', 'color1': 'red', 'color2': 'green', 'color3': 'blue', 'condition': 'different', 'corrAns': 'd'},
      {'shape1': 'star.png', 'shape2': 'wave.png', 'shape3': 'cross.png', 'color1': 'blue', 'color2': 'yellow', 'color3': 'red', 'condition': 'same', 'corrAns': 's'},
      {'shape1': 'wave.png', 'shape2': 'cross.png', 'shape3': 'star.png', 'color1': 'green', 'color2': 'yellow', 'color3': 'blue', 'condition': 'different', 'corrAns': 'd'}]
    Routine Sample
    Routine Test
  LoopTerminator trials
  Routine Summary
